PsychoPy2experiment version="2025.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = (1024, 768)
  color = $(-1.0000, -1.0000, -1.0000)
  expName = Cheese
  eyetracker = eyetracker.hw.mouse.EyeTracker
  keyboardBackend = PsychToolbox
  mgBlink = ['MIDDLE_BUTTON']
  mgMove = CONTINUOUS
  mgSaccade = 0.5
  runMode = 1
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Routines
  Routine cheese
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    TextComponent text
      font [set every frame] = Arial
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = Which one are you going to buy?
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    ImageComponent ambewela
      image = ambewelacheese.jpg
      pos = (-0.6, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent kothmale
      image = kothmale cheese.jpg
      pos = (-0.3, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent happycow
      image = happycow.jpeg
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent kraft
      image = Kraft cheese.jpeg
      pos = (0.3, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent richlife
      image = richlifecheese.jpg
      pos = (0.6, 0)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_2
      letterHeight = 0.02
      pos = (-0.6, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Ambewela Cheese
        100g
        Rs 520
        20 % OFF
        New Price - Rs 416
    TextComponent text_3
      letterHeight = 0.02
      pos = (-0.3, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Kothmale Cheddar
        250 g
        Rs 1300
    TextComponent text_4
      letterHeight = 0.02
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        HappyCow Cheese
        340 g
        Rs 1200
    TextComponent text_5
      letterHeight = 0.02
      pos = (0.3, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Kraft Cheddar Cheese
        250 g
        Rs 2590
    TextComponent text_6
      letterHeight = 0.02
      pos = (0.6, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Rich Life Cheddar Cheese
        100 g
        Rs 625
    MouseComponent mouse
      clickable = ambewela,kothmale,happycow,kraft,richlife
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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Flow
  Routine cheese
